PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import pyttsx3
        import random
        import socket
        import sys

        trial =  StreamInfo('trial_marker', 'trial', 1, 0, 'int32', 'trial_0')
        trial_outlet = StreamOutlet(trial)

        # Initialize the pyttsx3 engine
        engine = pyttsx3.init()

        # Define sound variables for numbers 0 to 9
        sound_0 = lambda: engine.say('0')
        sound_1 = lambda: engine.say('1')
        sound_2 = lambda: engine.say('2')
        sound_3 = lambda: engine.say('3')
        sound_4 = lambda: engine.say('4')
        sound_5 = lambda: engine.say('5')
        sound_6 = lambda: engine.say('6')
        sound_7 = lambda: engine.say('7')
        sound_8 = lambda: engine.say('8')
        sound_9 = lambda: engine.say('9')

        # Create a dictionary to easily reference sounds by numbers
        sounds = {
            0: sound_0,
            1: sound_1,
            2: sound_2,
            3: sound_3,
            4: sound_4,
            5: sound_5,
            6: sound_6,
            7: sound_7,
            8: sound_8,
            9: sound_9,
        }

        previous_number = random.choice(range(10))

        def play_random_sound(previous_number):
            even_numbers = [0, 2, 4, 6, 8]
            odd_numbers = [1, 3, 5, 7, 9]

            # Determine the type of previous number (even or odd)
            if previous_number % 2 == 0:
                # If previous number is even, 50% chance to pick an odd number
                if random.random() < 0.5:
                    current_number = random.choice(odd_numbers)
                else:
                    current_number = random.choice(even_numbers)
            else:
                # If previous number is odd, 50% chance to pick an even number
                if random.random() < 0.5:
                    current_number = random.choice(even_numbers)
                else:
                    current_number = random.choice(odd_numbers)

            # Ensure the current number is not a repeat of the previous number
            if current_number == previous_number:
                if current_number % 2 == 0:
                    current_number = random.choice(odd_numbers)
                else:
                    current_number = random.choice(even_numbers)

            # Push the current number to trial_outlet (assuming this is defined elsewhere)
            trial_outlet.push_sample([current_number])  # Replace with actual outlet if needed

            # Play the corresponding sound for the current number
            sounds[current_number]()
            engine.runAndWait()  # Ensure the sound is played

            # Return the current number to be used as previous_number in the next trial
            return current_number
      Begin Routine:
        play_random_sound(previous_number)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_duration
      text = +
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  Routine instructions
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        For this test you will need to complete a secondary task.
        Numbers will be auditorly presented from the computer every 5 seconds. When the numbers switch from odd to even or even to odd, you will need to say "CHANGE".

        If the current number is even and the previous number is even, NO RESPONSE is needed. Likewise, NO RESPONSE is needed when the previous and current number are both odd.

        However, you if you hear the evenness of the numbers change please say "CHANGE" aloud. For example, you would say CHANGE if you heard the number 4 followed by the number 7. You would NOT if you heard the number 4 followed by the number 6.

        Please let the experimenter know if you have any questions and when you are ready to begin the practice trials of the secondary task."
    KeyboardComponent end_task
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = end
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Flow
  Routine instructions
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = task.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 5.0)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.5)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 4.0)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)]),
      OrderedDict([('ISI_duration', 3.5)])]
    Routine trial
  LoopTerminator trial_loop
  Routine end
